CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:Staining
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    Set intensity range from:Image bit-depth
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:Staining
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:M1
    Convert green to gray?:Yes
    Name the output image:MyD88
    Convert blue to gray?:Yes
    Name the output image:BF
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:MyD88
    Name the primary objects to be identified:MyD88
    Typical diameter of objects, in pixel units (Min,Max):3,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0003,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
OverlayOutlines:[module_num:7|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:MyD88
    Name the output image:OverlayOutlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#21FF06
    Select objects to display:MyD88

DisplayDataOnImage:[module_num:8|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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:MyD88
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:OverlayOutlines
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    Name the output image that has the measurements displayed:DisplayImage
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    Image elements to save:Image
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    Display mode:Color
    Color map:Default
    Display background image?:Yes
    Color map scale:Use this image's measurement range
    Color map range:0.0,1.0

SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:OverlayOutlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:Staining
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:segmentation
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectIntensity:[module_num:10|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
    Select images to measure:M1, MyD88
    Select objects to measure:MyD88

MeasureObjectSizeShape:[module_num:11|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
    Select object sets to measure:MyD88
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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
DisplayDensityPlot:[module_num:13|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enabled:False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
    Select the object to display on the X-axis:MyD88
    Select the object measurement to plot on the X-axis:Intensity_MeanIntensity_MyD88
    Select the object to display on the Y-axis:MyD88
    Select the object measurement to plot on the Y-axis:Intensity_MeanIntensity_pp65
    Select the grid size:100
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
    How should the colorbar be scaled?:linear
    Select the color map:jet
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
DisplayScatterPlot:[module_num:14|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enabled:False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
    Type of measurement to plot on X-axis:Object
    Select the object to plot on the X-axis:MyD88
    Select the measurement to plot on the X-axis:Intensity_MeanIntensity_MyD88
    Type of measurement to plot on Y-axis:Object
    Select the object to plot on the Y-axis:MyD88
    Select the measurement to plot on the Y-axis:Intensity_MeanIntensity_pp65
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
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